CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Input
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Input
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:1
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    Image name:cytoplasm
    Channel number:2
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    Image name:ribosomes
    Channel number:3
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    Image name:Hoechst

GaussianFilter:[module_num:6|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
    Select the input image:Hoechst
    Name the output image:GaussianFilterHoechst
    Sigma:5

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):100,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:cytoplasm
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    Regularization factor:0
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MaskObjects:[module_num:9|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
    Select objects to be masked:Cells
    Name the masked objects:Cytoplasm
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:cytoplasm, ribosomes
    Select objects to measure:Cytoplasm, Nuclei

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
