CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Input
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Input
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:SirDNA
    Channel number:2
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    Image name:RPL
    Channel number:3
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    Image name:RPA16
    Channel number:4
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    Image name:NPM1

RunCellpose:[module_num:6|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
    Select the input image:SirDNA
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:0.1
    Expected object diameter:150
    Detection mode:nuclei
    Name the output object:InitialNucleus
    Use GPU:No
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:300
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:100
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes

MaskImage:[module_num:7|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
    Select the input image:NPM1
    Name the output image:MaskNPM1
    Use objects or an image as a mask?:Objects
    Select object for mask:InitialNucleus
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:MaskNPM1
    Name the primary objects to be identified:InitialNucleolus
    Typical diameter of objects, in pixel units (Min,Max):15,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ConvertObjectsToImage:[module_num:9|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
    Select the input objects:InitialNucleolus
    Name the output image:NucleolusObjectImage
    Select the color format:Binary (black & white)
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
MeasureObjectIntensityDistribution:[module_num:10|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
    Select images to measure:NucleolusObjectImage, RPL
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:InitialNucleolus
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:20
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
MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:InitialNucleolus, InitialNucleus
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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